<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:Bonsai.GenICam;assembly=Bonsai.GenICam"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT0S</rx:DueTime>
          <rx:Period>PT1S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:CreateReadMessage">
          <p1:FeatureName>ExposureTime</p1:FeatureName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT0.5S</rx:DueTime>
          <rx:Period>PT0.1S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Skip">
          <rx:Count>10</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Multiply">
        <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int64">
          <Value>1000</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Value" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>67000</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:CreateWriteMessage">
          <p1:FeatureName>ExposureTime</p1:FeatureName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:GenICamDevice">
          <p1:ProducerPath />
          <p1:DeviceIndex>0</p1:DeviceIndex>
          <p1:CameraModel>Allied Vision Mako U-029B</p1:CameraModel>
          <p1:NumBuffers>4</p1:NumBuffers>
          <p1:FrameTimeoutMs>5000</p1:FrameTimeoutMs>
          <p1:Features>
            <p1:Feature name="ExposureTime" value="20000" />
          </p1:Features>
          <p1:AcquireFrames>true</p1:AcquireFrames>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:FilterMessage">
          <p1:MessageType>Frame</p1:MessageType>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Frame.Image</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Frame</Selector>
      </Expression>
      <Expression xsi:type="p1:ParseFeature">
        <p1:FeatureName>ExposureTime</p1:FeatureName>
        <p1:FeatureType>Float</p1:FeatureType>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="8" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source2" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="9" To="13" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="10" To="12" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>
